PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = FoodExperiment
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Routines
  Routine trial
    ImageComponent Food_image
      image [set every repeat] = $FileName
      size = (0.55, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine Wait
    TextComponent Introduction_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        In the following experiment you will be
        shown different images of food items.

        You will be asked to rate how
        often you consume these different foods
        from a scale of 1-4

        (Often-Sometimes-Rarely-I've never eaten this)

        Please respond as quickly and accurately as possible
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Ready
    PolygonComponent polygon
      fillColor = $[1,1,1]
      lineWidth = 0.001
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine Response
    TextComponent ResponseText
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        How often do you eat this food?
        1-Often
        2-Sometimes
        3-Rarely
        4-I've never eaten it
    KeyboardComponent key_resp_2
      allowedKeys = '1', '2', '3', '4' 
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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  Routine Jittered_ISI
    PolygonComponent polygon_2
      fillColor = $[1,1,1]
      pos = (100, 100)
      shape = triangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = random()*.5 + 1.0
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Flow
  Routine Wait
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Order.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('FileName', '.\\SHINE_color_hsv_0001')]),
      OrderedDict([('FileName', '.\\SHINE_color_hsv_0004')]),
      OrderedDict([('FileName', '.\\SHINE_color_hsv_00010')]),
      OrderedDict([('FileName', '.\\SHINE_color_hsv_0010')]),
      OrderedDict([('FileName', '.\\SHINE_color_hsv_0196')])]
    Routine Ready
    Routine trial
    Routine Response
    Routine Jittered_ISI
  LoopTerminator trials
